CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does startwith "DAPI-")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "Mef2-")
    Name to assign these images:Mef2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "PCNA-")
    Name to assign these images:PCNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "StarDist-")
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    Name to assign these objects:Nuclei
    Select the image type:Objects
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MeasureObjectIntensity:[module_num:5|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
    Select images to measure:Mef2, PCNA
    Select objects to measure:Nuclei

IdentifyPrimaryObjects:[module_num:6|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enabled:False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
    Select the input image:PCNA
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.01,1.0
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    Log transform before thresholding?:No
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
FilterObjects:[module_num:7|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
    Select the objects to filter:Nuclei
    Name the output objects:PCNA_Positive
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_PCNA
    Filter using a minimum measurement value?:Yes
    Minimum value:0.04
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
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
FilterObjects:[module_num:8|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
    Select the objects to filter:Nuclei
    Name the output objects:Mef2_Positive
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Mef2
    Filter using a minimum measurement value?:Yes
    Minimum value:0.03
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
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
FilterObjects:[module_num:9|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
    Select the objects to filter:Nuclei
    Name the output objects:PCNA_Mef2_Positive
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Mef2
    Filter using a minimum measurement value?:Yes
    Minimum value:0.03
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
    Select the measurement to filter by:Intensity_MeanIntensity_PCNA
    Filter using a minimum measurement value?:Yes
    Minimum value:0.04
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
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
OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:QC_
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Mef2_Positive
    Select outline color:Green
    Select objects to display:PCNA_Positive
    Select outline color:cyan
    Select objects to display:PCNA_Mef2_Positive

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:QC_
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Nuclei|Location_Center_Y,Nuclei|Location_Center_X,Nuclei|Children_Mef2_Positive_Count,Nuclei|Children_PCNA_Mef2_Positive_Count,Nuclei|Children_PCNA_Positive_Count,Nuclei|Intensity_MeanIntensity_PCNA,Nuclei|Intensity_MeanIntensity_Mef2,Nuclei|Number_Object_Number,PCNA_Mef2_Positive|Location_Center_Y,PCNA_Mef2_Positive|Location_Center_X,PCNA_Mef2_Positive|Parent_Nuclei,Mef2_Positive|Location_Center_X,Mef2_Positive|Location_Center_Y,Mef2_Positive|Parent_Nuclei,PCNA_Positive|Location_Center_Y,PCNA_Positive|Location_Center_X,PCNA_Positive|Parent_Nuclei
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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